PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LDTProject
  keyboardBackend = ioHub
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Routines
  Routine Control
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Target
      letterHeight = 0.05
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_valid
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $word_valid_status
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    TextComponent D1
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid
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    TextComponent D2
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_1
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    TextComponent D3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_2
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    TextComponent D4
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_3
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    TextComponent D5
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_4
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  Routine Font_Size
    TextComponent Target_2
      letterHeight [set every repeat] = font_size
      pos = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
      text [set every repeat] = $word_valid_1
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $word_valid_status_1
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    TextComponent D1_2
      letterHeight [set every repeat] = font_size
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_0
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    TextComponent D2_2
      letterHeight [set every repeat] = font_size
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_01
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    TextComponent D3_2
      letterHeight [set every repeat] = font_size
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_02
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    TextComponent D4_2
      letterHeight [set every repeat] = font_size
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_03
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    TextComponent D5_2
      letterHeight [set every repeat] = font_size
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $word_invalid_04
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  Routine Speed_Res
    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent Target_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_valid_2
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $word_valid_status_2
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    TextComponent D1_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_invalid_00
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    TextComponent D2_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_invalid_001
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    TextComponent D3_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_invalid_002
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    TextComponent D4_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_invalid_003
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    TextComponent D5_3
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $speed_res
      text [set every repeat] = $word_invalid_004
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  Routine Introduction
    TextComponent Intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello,
        Thank you for being a part of this study!
        This project is a part of PSY310 Lab in Psychology course. We ask you to ensure that you are seated in a quiet place for the next 10-15 mins and read the following instructions carefully.
        Click anywhere on the screen to move forward.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine Instructions
    TextComponent Instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ensure that you are not disturbed for the next 10-15 mins.
        You will be performing a simple linguistic study, where you have to find a spoken English word among a group of non-sensical words. The spoken English word might or might not be present.
        If you feel that the word is present, press 'y' on your keyboard. If you feel that the word is not present, press 'n'.
        Continue to answer in the same way till the experiment comes to an end.
        HAVE FUN!
        Click anywhere on the screen to start the experiment.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine Thank_You
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
      text = The experiment is now over. Thank you for being a part of this project!
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Flow
  Routine Introduction
  Routine Instructions
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'nreps1': 0, 'nreps2': 1, 'nreps3': 0},
      {'nreps1': 1, 'nreps2': 0, 'nreps3': 0},
      {'nreps1': 0, 'nreps2': 0, 'nreps3': 1}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Control.xlsx
      loopType = random
      nReps = nreps1
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      conditions:
        [{'word_valid': 'nurse', 'word_valid_status': 'Y', 'word_invalid': 'snure', 'word_invalid_1': 'rabb', 'word_invalid_2': 'gloum', 'word_invalid_3': 'amet', 'word_invalid_4': 'gnaf'},
        {'word_valid': 'omen', 'word_valid_status': 'Y', 'word_invalid': 'mone', 'word_invalid_1': 'gayil', 'word_invalid_2': 'rabb', 'word_invalid_3': 'snire', 'word_invalid_4': 'alof'},
        {'word_valid': 'silo', 'word_valid_status': 'Y', 'word_invalid': 'lios', 'word_invalid_1': 'ascue', 'word_invalid_2': 'dieft', 'word_invalid_3': 'sifto', 'word_invalid_4': 'geen'},
        {'word_valid': 'dole', 'word_valid_status': 'Y', 'word_invalid': 'leod', 'word_invalid_1': 'soule', 'word_invalid_2': 'poney', 'word_invalid_3': 'wrom', 'word_invalid_4': 'rabb'},
        {'word_valid': 'play', 'word_valid_status': 'Y', 'word_invalid': 'ptay', 'word_invalid_1': 'trif', 'word_invalid_2': 'teabs', 'word_invalid_3': 'miam', 'word_invalid_4': 'dary'},
        {'word_valid': 'rhyme', 'word_valid_status': 'Y', 'word_invalid': 'hyrme', 'word_invalid_1': 'diep', 'word_invalid_2': 'leod', 'word_invalid_3': 'coist', 'word_invalid_4': 'soule'},
        {'word_valid': 'which', 'word_valid_status': 'Y', 'word_invalid': 'whicb', 'word_invalid_1': 'lavin', 'word_invalid_2': 'sheap', 'word_invalid_3': 'seter', 'word_invalid_4': 'hyrme'},
        {'word_valid': 'fang', 'word_valid_status': 'Y', 'word_invalid': 'gnaf', 'word_invalid_1': 'unon', 'word_invalid_2': 'gluid', 'word_invalid_3': 'chene', 'word_invalid_4': 'nuat'}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
      Routine Control
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Font_Size.xlsx
      loopType = random
      nReps = nreps2
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      conditions:
        [{'word_valid_1': 'satin', 'word_valid_status_1': 'Y', 'word_invalid_0': 'snait', 'word_invalid_01': 'diam', 'word_invalid_02': 'westa', 'word_invalid_03': 'courd', 'word_invalid_04': 'amet', 'font_size': 0.03},
        {'word_valid_1': 'louse', 'word_valid_status_1': 'Y', 'word_invalid_0': 'soule', 'word_invalid_01': 'knim', 'word_invalid_02': 'dure', 'word_invalid_03': 'rham', 'word_invalid_04': 'meony', 'font_size': 0.1},
        {'word_valid_1': 'kudos', 'word_valid_status_1': 'Y', 'word_invalid_0': 'dusko', 'word_invalid_01': 'snait', 'word_invalid_02': 'ruso', 'word_invalid_03': 'rebem', 'word_invalid_04': 'chene', 'font_size': 0.1},
        {'word_valid_1': 'sort', 'word_valid_status_1': 'Y', 'word_invalid_0': 'tros', 'word_invalid_01': 'clead', 'word_invalid_02': 'osmeo', 'word_invalid_03': 'aboot', 'word_invalid_04': 'rysap', 'font_size': 0.1},
        {'word_valid_1': 'ogle', 'word_valid_status_1': 'Y', 'word_invalid_0': 'gole', 'word_invalid_01': 'voipt', 'word_invalid_02': 'doil', 'word_invalid_03': 'whicb', 'word_invalid_04': 'scak', 'font_size': 0.03},
        {'word_valid_1': 'organ', 'word_valid_status_1': 'Y', 'word_invalid_0': 'agorn', 'word_invalid_01': 'westa', 'word_invalid_02': 'meaco', 'word_invalid_03': 'hemo', 'word_invalid_04': 'ptay', 'font_size': 0.1},
        {'word_valid_1': 'owlet', 'word_valid_status_1': 'Y', 'word_invalid_0': 'towle', 'word_invalid_01': 'gnaf', 'word_invalid_02': 'viel', 'word_invalid_03': 'snure', 'word_invalid_04': 'mone', 'font_size': 0.03}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
      Routine Font_Size
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = Speed.xlsx
      loopType = random
      nReps = nreps3
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      conditions:
        [{'word_valid_2': 'ampt', 'word_valid_status_2': 'N', 'word_invalid_00': 'rysap', 'word_invalid_001': 'tets', 'word_invalid_002': 'magam', 'word_invalid_003': 'bowln', 'word_invalid_004': 'aboot', 'speed_res': 4},
        {'word_valid_2': 'aboot', 'word_valid_status_2': 'N', 'word_invalid_00': 'viel', 'word_invalid_001': 'reint', 'word_invalid_002': 'gnaf', 'word_invalid_003': 'delge', 'word_invalid_004': 'dure', 'speed_res': 10},
        {'word_valid_2': 'lucka', 'word_valid_status_2': 'N', 'word_invalid_00': 'plif', 'word_invalid_001': 'boye', 'word_invalid_002': 'miam', 'word_invalid_003': 'gluid', 'word_invalid_004': 'colel', 'speed_res': 10},
        {'word_valid_2': 'ampt', 'word_valid_status_2': 'N', 'word_invalid_00': 'adlet', 'word_invalid_001': 'thete', 'word_invalid_002': 'thenk', 'word_invalid_003': 'geen', 'word_invalid_004': 'evol', 'speed_res': 4},
        {'word_valid_2': 'westa', 'word_valid_status_2': 'N', 'word_invalid_00': 'boye', 'word_invalid_001': 'chene', 'word_invalid_002': 'clead', 'word_invalid_003': 'pelk', 'word_invalid_004': 'lewld', 'speed_res': 4},
        {'word_valid_2': 'prige', 'word_valid_status_2': 'N', 'word_invalid_00': 'rebem', 'word_invalid_001': 'mech', 'word_invalid_002': 'lucka', 'word_invalid_003': 'queak', 'word_invalid_004': 'leod', 'speed_res': 4},
        {'word_valid_2': 'dieft', 'word_valid_status_2': 'N', 'word_invalid_00': 'cimim', 'word_invalid_001': 'mause', 'word_invalid_002': 'voipt', 'word_invalid_003': 'buoya', 'word_invalid_004': 'sabil', 'speed_res': 4}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
      Routine Speed_Res
    LoopTerminator trials_3
  LoopTerminator trials_4
  Routine Thank_You
